
includeFile = ../Configurations/MainConf.txt

###################################################### Pdd WaterPhantom #####################################################

s:Sc/DoseAtWaterPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtWaterPhantom/Component                 = "WaterPhantom"
s:Sc/DoseAtWaterPhantom/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseAtWaterPhantom/OutputType                = "Csv"
s:Sc/DoseAtWaterPhantom/OutputFile                = "DoseAtWaterPhantom"
i:Sc/DoseAtWaterPhantom/XBins                     = 100
i:Sc/DoseAtWaterPhantom/YBins                     = 100
i:Sc/DoseAtWaterPhantom/ZBins                     = 100


###################################################### Energy Fluence WaterPhantom #####################################################

s:Sc/EnergyFluenceAtIsocenter/Quantity                  = "EnergyFluence"
s:Sc/EnergyFluenceAtIsocenter/Component                 = "Isocenter"
s:Sc/EnergyFluenceAtIsocenter/IfOutputFileAlreadyExists = "Increment"
s:Sc/EnergyFluenceAtIsocenter/OutputType                = "Csv"
s:Sc/EnergyFluenceAtIsocenter/OutputFile                = "EnergyFluenceAtIsocenter"
i:Sc/EnergyFluenceAtIsocenter/XBins                     = 60
i:Sc/EnergyFluenceAtIsocenter/YBins                     = 60


################################################# Scorer Energy Dep Spec ###############################################

s:Sc/EnergyDepSpectAtWaterPhantom/Component        = "WaterPhantom"
s:Sc/EnergyDepSpectAtWaterPhantom/OutputFile       = "EnergyDepSpectAtWaterPhantom"
s:Sc/EnergyDepSpectAtWaterPhantom/Quantity         = "EnergyDeposit"
s:Sc/EnergyDepSpectAtWaterPhantom/IfOutputFileAlreadyExists = "Increment"
s:Sc/EnergyDepSpectAtWaterPhantom/OutputType       = "Csv"
i:Sc/EnergyDepSpectAtWaterPhantom/EBins            = 100
d:Sc/EnergyDepSpectAtWaterPhantom/EBinMin          = 0. MeV
d:Sc/EnergyDepSpectAtWaterPhantom/EBinMax          = 15. MeV
#d:Sc/EnergyDepSpectAtWaterPhantom/EBinMax          = 24. MeV

###################################################### Pdd Aluminium Detector 1 #####################################################

s:Sc/DoseAtAluminumDetector1/Quantity                  = "DoseToMedium"
s:Sc/DoseAtAluminumDetector1/Component                 = "AluminumDetector1"
s:Sc/DoseAtAluminumDetector1/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseAtAluminumDetector1/OutputType                = "Csv"
s:Sc/DoseAtAluminumDetector1/OutputFile                = "DoseAtAluminumDetector1"
i:Sc/DoseAtAluminumDetector1/XBins                     = 20
i:Sc/DoseAtAluminumDetector1/YBins                     = 20
i:Sc/DoseAtAluminumDetector1/ZBins                     = 20

###################################################### Pdd Aluminium Detector 2 #####################################################

s:Sc/DoseAtAluminumDetector2/Quantity                  = "DoseToMedium"
s:Sc/DoseAtAluminumDetector2/Component                 = "AluminumDetector2"
s:Sc/DoseAtAluminumDetector2/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseAtAluminumDetector2/OutputType                = "Csv"
s:Sc/DoseAtAluminumDetector2/OutputFile                = "DoseAtAluminumDetector2"
i:Sc/DoseAtAluminumDetector2/XBins                     = 20
i:Sc/DoseAtAluminumDetector2/YBins                     = 20
i:Sc/DoseAtAluminumDetector2/ZBins                     = 20